PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test1
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Routines
  Routine trial
    PolygonComponent line
      durationEstim = 5
      fillColor = $[1,1,1]
      lineWidth = 5
      pos [set every repeat] = (0, 0)
      shape = line
      size [set every repeat] = (0.5, 0.5)
      startVal [frame N] = 0.0
      stopVal [condition] = 1.0
      units = pix
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine trial
